<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:;assembly=Extensions" xmlns:q3="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderFrame" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateWindow">
          <q1:Width>640</q1:Width>
          <q1:Height>480</q1:Height>
          <q1:VSync>On</q1:VSync>
          <q1:SwapSync>false</q1:SwapSync>
          <q1:ClearColor>Black</q1:ClearColor>
          <q1:ClearMask>DepthBufferBit ColorBufferBit</q1:ClearMask>
          <q1:CursorVisible>true</q1:CursorVisible>
          <q1:Location xsi:nil="true" />
          <q1:WindowBorder>Resizable</q1:WindowBorder>
          <q1:WindowState>Normal</q1:WindowState>
          <q1:DisplayDevice>Primary</q1:DisplayDevice>
          <q1:TargetRenderFrequency>0</q1:TargetRenderFrequency>
          <q1:RenderState />
          <q1:GraphicsMode>
            <q1:ColorFormat>
              <q1:Red>8</q1:Red>
              <q1:Green>8</q1:Green>
              <q1:Blue>8</q1:Blue>
              <q1:Alpha>8</q1:Alpha>
            </q1:ColorFormat>
            <q1:Depth>16</q1:Depth>
            <q1:Stencil>0</q1:Stencil>
            <q1:Samples>0</q1:Samples>
            <q1:AccumulatorFormat>
              <q1:Red>0</q1:Red>
              <q1:Green>0</q1:Green>
              <q1:Blue>0</q1:Blue>
              <q1:Alpha>0</q1:Alpha>
            </q1:AccumulatorFormat>
            <q1:Buffers>2</q1:Buffers>
            <q1:Stereo>false</q1:Stereo>
          </q1:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:ShaderResources">
          <q1:Shaders />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:MeshResources">
          <q1:Meshes />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:TextureResources">
          <q1:Textures />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:genGridSpacing">
          <q2:Left>-10</q2:Left>
          <q2:Right>10</q2:Right>
          <q2:Top>5</q2:Top>
          <q2:Bottom>-5</q2:Bottom>
          <q2:posStd>0.15</q2:posStd>
          <q2:binSize>0.1</q2:binSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:FlowField">
          <q2:rows>10</q2:rows>
          <q2:cols>10</q2:cols>
          <q2:VelocityX>0</q2:VelocityX>
          <q2:VelocityY>0</q2:VelocityY>
          <q2:dirStd>0</q2:dirStd>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:getIniVelandBinPos" />
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>sepRadius</MemberName>
        <Name>sepRadius</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>sepWeight</MemberName>
        <Name>sepWeight</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>sepFreq</MemberName>
        <Name>sepFreq</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:Abs" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:Abs" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>Top</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>-5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>Bottom</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>-10</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>Left</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>10</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>Right</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:RigInfo.NormalizedViewport.bonsai" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Top</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Bottom</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Left</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Right</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Left</MemberName>
        <Name>Left</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Right</MemberName>
        <Name>Right</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Bottom</MemberName>
        <Name>Bottom</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Top</MemberName>
        <Name>Top</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Top</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Left</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Right</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Bottom</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Left</MemberName>
        <Name>Left1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Right</MemberName>
        <Name>Right1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Top</MemberName>
        <Name>Top1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Bottom</MemberName>
        <Name>Bottom1</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Top</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Left</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Right</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Bottom</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.PrimitiveResources.bonsai" />
      <Expression xsi:type="GroupWorkflow">
        <Name>DrawMovingCircleArray</Name>
        <Description>Draws multiple colored circles using the input array as position data.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>LocationX</MemberName>
              <Name>LocationX</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>LocationY</MemberName>
              <Name>LocationY</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:CreateVector4">
                <q1:X>1</q1:X>
                <q1:Y>1</q1:Y>
                <q1:Z>1</q1:Z>
                <q1:W>1</q1:W>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>X</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Y</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Z</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>W</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>color</q1:UniformName>
                <q1:ShaderName>CircleArray</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorR</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorG</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorB</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorA</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property name="ExtentX" />
                <Property name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Diameter</Name>
            </Expression>
            <Expression xsi:type="PropertySourceOfCreateScaleSingle">
              <MemberName>X</MemberName>
              <Value>0.02</Value>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>projection</q1:UniformName>
                <q1:ShaderName>CircleArray</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:flowMove">
                <q2:sepRadius>0</q2:sepRadius>
                <q2:sepWeight>0</q2:sepWeight>
                <q2:sepFreq>5</q2:sepFreq>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:DrawMeshInstanced">
                <q1:ShaderName>CircleArray</q1:ShaderName>
                <q1:MeshName>Quad</q1:MeshName>
                <q1:Usage>DynamicDraw</q1:Usage>
                <q1:InstanceAttributes>
                  <q1:InstanceAttributeMapping>
                    <q1:Size>2</q1:Size>
                    <q1:Normalized>false</q1:Normalized>
                    <q1:Type>Float</q1:Type>
                    <q1:Divisor>1</q1:Divisor>
                  </q1:InstanceAttributeMapping>
                </q1:InstanceAttributes>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>sepRadius</MemberName>
              <Name>sepRadius</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>sepWeight</MemberName>
              <Name>sepWeight</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>sepFreq</MemberName>
              <Name>sepFreq</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Transform</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Angle</MemberName>
                    <Name>Angle</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateUniform">
                      <q1:UniformName>transform</q1:UniformName>
                      <q1:ShaderName>CircleArray</q1:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>X</MemberName>
                    <Name>ExtentX</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Y</MemberName>
                    <Name>ExtentY</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>X</MemberName>
                    <Name>LocationX</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Y</MemberName>
                    <Name>LocationY</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:RotateZ">
                      <q1:Order>Prepend</q1:Order>
                      <q1:Angle>0</q1:Angle>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:Scale">
                      <q1:Order>Prepend</q1:Order>
                      <q1:X>0.02</q1:X>
                      <q1:Y>0.02</q1:Y>
                      <q1:Z>1</q1:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:CreateTranslation">
                      <q1:X>0</q1:X>
                      <q1:Y>0</q1:Y>
                      <q1:Z>0</q1:Z>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>10</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>8</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>9</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>9</To>
                    <Label>Source3</Label>
                  </Edge>
                  <Edge>
                    <From>6</From>
                    <To>10</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>7</From>
                    <To>10</To>
                    <Label>Source3</Label>
                  </Edge>
                  <Edge>
                    <From>8</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>9</From>
                    <To>8</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>10</From>
                    <To>9</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>22</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>32</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>32</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>9</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>4</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>4</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>8</From>
              <To>4</To>
              <Label>Source5</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>22</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>9</From>
              <To>23</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>10</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>11</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>12</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>13</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>14</From>
              <To>10</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>15</From>
              <To>11</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>16</From>
              <To>12</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>17</From>
              <To>13</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>18</From>
              <To>32</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>19</From>
              <To>20</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>20</From>
              <To>18</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>21</From>
              <To>24</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>22</From>
              <To>23</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>23</From>
              <To>26</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>24</From>
              <To>32</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>25</From>
              <To>28</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>26</From>
              <To>25</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>27</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>28</From>
              <To>27</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>29</From>
              <To>25</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>30</From>
              <To>25</To>
              <Label>Source3</Label>
            </Edge>
            <Edge>
              <From>31</From>
              <To>25</To>
              <Label>Source4</Label>
            </Edge>
            <Edge>
              <From>32</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:RigInfo.ViewportDegrees.bonsai">
        <Left>-10</Left>
        <Right>10</Right>
        <Bottom>-5</Bottom>
        <Top>5</Top>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>54</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>52</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>53</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>53</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>53</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>53</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>10</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>10</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>10</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>22</From>
        <To>10</To>
        <Label>Source5</Label>
      </Edge>
      <Edge>
        <From>23</From>
        <To>24</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>25</From>
        <To>26</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>27</From>
        <To>28</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>29</From>
        <To>30</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>31</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>32</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>33</From>
        <To>38</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>34</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>35</From>
        <To>17</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>36</From>
        <To>54</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>37</From>
        <To>54</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>38</From>
        <To>54</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>39</From>
        <To>54</To>
        <Label>Source5</Label>
      </Edge>
      <Edge>
        <From>40</From>
        <To>39</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>41</From>
        <To>36</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>42</From>
        <To>37</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>43</From>
        <To>20</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>44</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>45</From>
        <To>8</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>46</From>
        <To>8</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>47</From>
        <To>8</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>48</From>
        <To>46</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>49</From>
        <To>44</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>50</From>
        <To>45</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>51</From>
        <To>47</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>52</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>54</From>
        <To>31</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateWindow, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.ShaderResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.MeshResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.TextureResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.LoadResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>genGridSpacing, Extensions, Version=0.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>FlowField, Extensions, Version=0.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>getIniVelandBinPos, Extensions, Version=0.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SubtractBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.Abs, Bonsai.Numerics, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateVector4, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.PropertySource`2[[Bonsai.Shaders.CreateScale, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null],[System.Single, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089]], Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Sample, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>flowMove, Extensions, Version=0.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMeshInstanced, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RotateZ, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Scale, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateTranslation, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>